PsychoPy2experiment version="2021.2.3"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = food_intake
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = 0.09
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Welcome!
    ButtonComponent button
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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    TextComponent Description
      letterHeight = 0.05
      pos = (0.17, 0)
      startVal [time (s)] = 0
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      text:
        1. Task: Reading a text out loud
        2. Task: Yawning
        3. Task: Resting
        4. Task: Eating soup
        5. Task: Eating solid food
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        Description.alignText("left");
      Begin Routine:
        Description.alignText='left'
  Routine GoodbyeScreen
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating.

        The experiment is finished now.
  Routine blank4
    TextComponent text_blank4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = To be continued soon
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  Routine Speaking_40s
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Zu Frühlingsbeginn machte man plötzlich eine alarmierende Entdeckung. Schneeball suchte nachts heimlich die Farm auf! Die Tiere waren so beunruhigt, dass sie in ihren Ställen kaum noch Schlaf fanden. Jede Nacht, so hieß es, schleiche er sich im Schutze der Dunkelheit herein und verübe alle möglichen Missetaten. Er stahl das Korn, er stießt die Milchkübel um, er zerbrach die Eier, er zertrampelte die Saatbeete, er knabberte die Rinde der Obstbäume ab. Wenn irgendetwas schiefging, wurde dies in der Regel Schneeball zugeschrieben. War ein Fenster zerbrochen oder Abfluss verstopft, durfte man sicher sein, dass irgendjemand erklärte, Schneeball sei in der Nacht gekommen und habe es getan, und als der Schlüssel zur Futterkammer verloren ging, da war die ganze Farm überzeugt davon, dass Schneeball ihn in den Brunnen geworfen hatte.
      wrapWidth = 1.2
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  Routine Yawning_40s
    ImageComponent image_2
      image = Bilder\gähnen.jpg
      size = (0.5, 0.333)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine Description_Speaking
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Please read the following text aloud and clearly. If you reach the end before the time runs out, please start again from the beginning (duration: 2 intervals of 40 seconds each).
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    ButtonComponent button_2
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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    ImageComponent image
      image = Bilder\sprechen.jpg
      pos = (0, 0.25)
      size = (0.4, 0.266)
      startVal [time (s)] = 0.0
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  Routine Description_Yawning
    TextComponent text_Yawning
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please yawn as naturally as possible (duration: 20 intervals of 3 seconds each).
    ButtonComponent button_yawning
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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  Routine Resting
    ImageComponent image_3
      image = Bilder\cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Description_Resting
    TextComponent text_3
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Look at the cross and try to relax your facial muscles as much as possible (duration: 1 interval of 60 seconds).
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    ButtonComponent button_3
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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  Routine Description_Eating_NSF
    TextComponent text_4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please eat the soup (duration: 2 intervals of 40 seconds each).
    ButtonComponent button_4
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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  Routine Eating_NSF
    ImageComponent image_4
      image = Bilder\Suppe.jpg
      size = (0.5, 0.336)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Description_Eating_SF
    TextComponent text_6
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please eat nuts in the first and second interval and bread in the second and fourth interval (duration: 4 intervals of 40 seconds each).
    ButtonComponent button_5
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0
      text = Start
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  Routine Eating_SF_bread
    ImageComponent image_5
      image = Bilder\Brot.jpg
      size = (0.5, 0.333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Eating_SF_nuts
    ImageComponent image_6
      image = Bilder\nuts.jpg
      size = (0.5, 0.329)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Description_Resting_Eyes_closed
    TextComponent text_7
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Close your eyes and try to relax your facial muscles as much as possible until you hear a sound (duration: 1 interval of 60 seconds).
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    ButtonComponent button_6
      bold = True
      color = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Start
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  Routine Resting_eyes_closed
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 40
      stopVal [duration (s)] = 1.0
      volume = 0.6
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Flow
  Routine WelcomeScreen
  Routine blank4
  Routine Description_Speaking
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Speaking_40s
    Routine blank4
  LoopTerminator trials
  Routine Description_Yawning
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Yawning_40s
    Routine blank4
  LoopTerminator trials_2
  Routine Description_Resting
  Routine Resting
  Routine blank4
  Routine Description_Resting_Eyes_closed
  Routine Resting_eyes_closed
  Routine blank4
  Routine Description_Eating_NSF
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Eating_NSF
    Routine blank4
  LoopTerminator trials_3
  Routine Description_Eating_SF
  Routine Eating_SF_nuts
  Routine blank4
  Routine Eating_SF_nuts
  Routine blank4
  Routine Eating_SF_bread
  Routine blank4
  Routine Eating_SF_bread
  Routine GoodbyeScreen
